CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723174500
GitHash:6c2d896
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.', '---', 'Settings converted from legacy pipeline.']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
    Filter images?:Custom
    Select the rule criteria:and (extension does istif) (file doesnot contain "Thumb")

Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '---', 'Settings converted from legacy pipeline.']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression:(?P<Timepoint>[0-9]*)$
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '---', 'Settings converted from legacy pipeline.', 'Please change any color images from "Load as Grayscale image" to "Load as Color image"']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
    Select the rule criteria:and (file does contain "w1")
    Name to assign these images:Nuclei
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "w2")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "w3")
    Name to assign these images:TRITC
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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
Groups:[module_num:4|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notes:['The Groups module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.', '---', 'Settings converted from legacy pipeline.']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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:Nuclei
    Name the output image:IllumBlue
    Select how the illumination function is calculated:Background
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    Block size:20
    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:No smoothing
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:6|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
    Select the input image:Nuclei
    Name the output image:CorrBlue
    Select the illumination function:IllumBlue
    Select how the illumination function is applied:Divide

IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:CorrBlue
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):15,40
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.003,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
ExpandOrShrinkObjects:[module_num:8|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
    Select the input objects:Nuclei
    Name the output objects:Cytoplasm
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:5
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    Retain the outlines of the identified objects?:No
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
IdentifySecondaryObjects:[module_num:9|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enabled:False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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Distance - N
    Select the input image:Nuclei
    Number of pixels by which to expand the primary objects:10
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    Retain outlines of the identified secondary objects?:No
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
IdentifyTertiaryObjects:[module_num:10|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enabled:False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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
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    Retain outlines of the tertiary objects?:No
    Shrink smaller object prior to subtraction?:Yes

OverlayOutlines:[module_num:11|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Red
    Name the output image:OrigOverlay
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:Red
    Load outlines from an image or objects?:Objects
    Select objects to display:Cytoplasm

MeasureObjectIntensity:[module_num:12|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
    Hidden:2
    Select an image to measure:GFP
    Select an image to measure:TRITC
    Select objects to measure:Cytoplasm

ExportToSpreadsheet:[module_num:13|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|None
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements to export:Cytoplasm|Intensity_MeanIntensity_TRITC,Cytoplasm|Intensity_MeanIntensity_GFP
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite without warning?:No
    Data to export:Cytoplasm
    Combine these object measurements with those of the previous object?:No
    File name:20160701_CI-6850-X31_re_raw.csv
    Use the object name for the file name?:No
